<PlusConfiguration version="2.3" PlusRevision="Plus-2.3.0.4338 - Win32">
  
  <UsBoneFilter Threshold="10">
    <ScanConversion
      TransducerName="Ultrasonix_L9-4/38"
      TransducerGeometry="LINEAR"
      ImagingDepthMm="60.0"
      TransducerWidthMm="40.0"
      OutputImageSizePixel="820 616"
      TransducerCenterPixel="410 1"
      OutputImageSpacingMmPerPixel="0.085 0.085"/>
  </UsBoneFilter>
  
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        0.000796231	0.0854272	0.000850194	12.74
        -0.0853999	0.000772721	0.00233653	50.76
        0.00232863	-0.000871617	0.0853992	-0.5
        0	0	0	1"
       Error="0.582721" Date="2012.02.06 17:57:00"/>
  </CoordinateDefinitions>
  
  <VolumeReconstruction
   OutputSpacing="0.5 0.5 0.5"
   ClipRectangleOrigin="0 0"
   ClipRectangleSize="820 616"
   Interpolation="LINEAR"
   Optimization="FULL"
   Compounding="On"
   FillHoles="Off" />
 
</PlusConfiguration>
